PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop
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Routines
  Routine trial
    TextComponent Target
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
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      text:
        Any text

        including line breaks
    KeyboardComponent response
      allowedKeys = 'y','n','left','right','space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Feedback_2
  Routine Feedback_3
    CodeComponent code
      Code Type = Py
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('word', 'red'), ('colour', 'red'), ('congruent', 1), ('corrAns', 'left')]),
      OrderedDict([('word', 'red'), ('colour', 'blue'), ('congruent', 0), ('corrAns', 'right')]),
      OrderedDict([('word', 'red'), ('colour', 'green'), ('congruent', 0), ('corrAns', 'down')]),
      OrderedDict([('word', 'red'), ('colour', 'yellow'), ('congruent', 0), ('corrAns', 'up')]),
      OrderedDict([('word', 'blue'), ('colour', 'blue'), ('congruent', 1), ('corrAns', 'right')]),
      OrderedDict([('word', 'blue'), ('colour', 'green'), ('congruent', 0), ('corrAns', 'down')]),
      OrderedDict([('word', 'blue'), ('colour', 'yellow'), ('congruent', 0), ('corrAns', 'up')]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('congruent', 1), ('corrAns', 'down')]),
      OrderedDict([('word', 'green'), ('colour', 'yellow'), ('congruent', 0), ('corrAns', 'up')]),
      OrderedDict([('word', 'yellow'), ('colour', 'yellow'), ('congruent', 1), ('corrAns', 'up')])]
    Routine trial
    Routine Feedback_2
  LoopTerminator trials
